PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = pilot_study
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine WelcomeScreen
    RoutineSettingsComponent WelcomeScreen
      saveStartStop = False
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    TextComponent welcome_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hello, Welcome the Image Matching study conducted by the VIDAR lab.

        In this study, you will be given a query image of a hotel room, and six similar images. Your task is to select the image that is a match to the query image.

        Press 'SPACE' to continue.
    KeyboardComponent next_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine stealing_its_code_1
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    ImageComponent top_left_img
      image = resources/images/image_1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0
      units = height
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    ImageComponent top_mid_img
      image = resources/images/image_2.png
      startVal [time (s)] = 0
      units = height
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    ImageComponent top_right_img
      image = resources/images/image_3.png
      pos = (0.3, 0)
      startVal [time (s)] = 0
      units = height
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    ImageComponent bott_right_img
      image = resources/images/image_4.png
      pos = (0.3, -0.25)
      startVal [time (s)] = 0
      units = height
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    ImageComponent bott_mid_img
      image = resources/images/image_5.png
      pos = (0, -0.25)
      startVal [time (s)] = 0
      units = height
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    ImageComponent bott_left_img
      image = resources/images/image_6.png
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0
      units = height
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    MouseComponent selecting_img_mouse
      clickable = top_left_img, top_mid_img, top_right_img, bott_right_img, bott_mid_img, bott_left_img
      correctAns = bott_left_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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    ImageComponent ref_img
      image = resources/images/image_7.png
      pos = (0, 0.3)
      startVal [time (s)] = 0
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  Routine consent
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    TextComponent ask_consent
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Now that you understand what will be expected from you as well as what data will be collected, do you consent? (y/n)
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    KeyboardComponent consent_key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Each Frame:
        if(consent_key.keys == 'n' or consent_key.keys == str('n')):
            return quit
      Each JS Frame:
        //check if unconsented
        if(consent_key.keys === 'n' || consent_key.keys === String("n")){
          return quitPsychoJS('Unconsented through pressing the [n] key. Goodbye!', false);
        }
  Routine EndScreen
    RoutineSettingsComponent EndScreen
      saveStartStop = False
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    TextComponent end_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing!

        Please wait while we save your results...
    CodeComponent DataPipe_Link
      Code Type = JS
      Begin JS Routine:
        // Prevent default browser CSV download
        //psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...')
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'DLFoEuJu8PX1',
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
Flow
  Routine WelcomeScreen
  Routine consent
  Routine stealing_its_code_1
  Routine EndScreen
